CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Experiment>SH-SY5).(?P<Date>[0-9][0-9]*.[0-9][0-9]*.[0-9][0-9]).(?P<Exposure>[0-9][0-9][A-Z])G*.d1*.(?P<Plate>[0-9])(?P<Well>[A-H][0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DPT0
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    Set intensity range from:Manual
    Assignments count:1
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
LabelImages:[module_num:5|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
    Number of image sites per well:1
    Number of columns per plate:12
    Number of rows per plate:8
    Order of image data:Row

ColorToGray:[module_num:6|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
    Select the input image:DPT0
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Threshold:[module_num:7|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
    Select the input image:OrigGray
    Name the output image:AUTO_Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:OrigGray
    Name the primary objects to be identified:IdentifyLTU
    Typical diameter of objects, in pixel units (Min,Max):100,300
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:10
    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:IdentifyLTU
    Name the objects to be identified:IdentifyYBKG
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:AUTO_Threshold
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:IdentifyYBKG
    Select the smaller identified objects:IdentifyLTU
    Name the tertiary objects to be identified:Fish_Background
    Shrink smaller object prior to subtraction?:No

SplitOrMergeObjects:[module_num:11|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
    Select the input objects:IdentifyYBKG
    Name the new objects:Merged_YBKG
    Operation:Merge
    Maximum distance within which to merge objects:70
    Merge using a grayscale image?:Yes
    Select the grayscale image to guide merging:OrigGray
    Minimum intensity fraction:0.9
    Method to find object intensity:Closest point
    Merging method:Distance
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
RelateObjects:[module_num:12|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
    Parent objects:Merged_YBKG
    Child objects:IdentifyLTU
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:13|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
    Select the input objects:IdentifyLTU
    Name the new objects:Merged_LTU
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Merged_YBKG
    Output object type:Disconnected

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:OrigGray
    Select objects to measure:Fish_Background, IdentifyLTU, IdentifyYBKG, Merged_LTU, Merged_YBKG

FilterObjects:[module_num:15|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
    Select the objects to filter:Merged_YBKG
    Name the output objects:Fish_Only
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_OrigGray
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
Threshold:[module_num:16|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
    Select the input image:OrigGray
    Name the output image:YBKG_Threshold
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_IdentifyYBKG
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
MaskImage:[module_num:17|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
    Select the input image:OrigGray
    Name the output image:Fish_Image
    Use objects or an image as a mask?:Objects
    Select object for mask:Fish_Only
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    Invert the mask?:No

RelateObjects:[module_num:18|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
    Parent objects:Fish_Only
    Child objects:IdentifyLTU
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Fish_LTU
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
MaskImage:[module_num:19|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
    Select the input image:OrigGray
    Name the output image:BKG_Only
    Use objects or an image as a mask?:Objects
    Select object for mask:Fish_Only
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    Invert the mask?:Yes

Threshold:[module_num:20|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
    Select the input image:BKG_Only
    Name the output image:BKG_Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:21|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
    Select the input image:Fish_Image
    Name the output image:Fish_Image_Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:22|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
    Select the input image:Fish_Image
    Name the output image:Fish_LTU_Image
    Use objects or an image as a mask?:Objects
    Select object for mask:Fish_LTU
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    Invert the mask?:No

Threshold:[module_num:23|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
    Select the input image:Fish_LTU_Image
    Name the output image:Fish_LTU_Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:Fish_LTU, Merged_LTU
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_T,Image|Metadata_C,Image|Metadata_ColorFormat,Image|Metadata_SizeY,Image|Metadata_Plate,Image|Metadata_ChannelName,Image|Metadata_Site,Image|Metadata_Column,Image|Metadata_Series,Image|Metadata_SizeC,Image|Metadata_Row,Image|Metadata_SizeT,Image|Metadata_FileLocation,Image|Metadata_Z,Image|Metadata_SizeX,Image|Metadata_Well,Image|Metadata_Frame,Image|Metadata_SizeZ,Image|URL_DPT0,Merged_LTU|Intensity_IntegratedIntensity_OrigGray,Merged_LTU|Intensity_MeanIntensity_OrigGray,Merged_LTU|AreaShape_Area,IdentifyLTU|Intensity_IntegratedIntensity_OrigGray,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:5-22imp_5-21tu
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:26|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CellProfiler_Zevatars.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:DPT0
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:5-22_5-21_CellProfiler_Exp
    Which objects should be used for locations?:Merged_LTU
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:Yes
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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